PsychoPy2experiment version="2021.2.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial
    ImageComponent left
      image [set every repeat] = $left
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/yonatan.yellin/PycharmProjects/PsychoExp/Book1.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'left': '1.png'},
      {'left': '1.5.png'},
      {'left': '2.png'},
      {'left': '2.5.png'},
      {'left': '3.png'},
      {'left': '3.5.png'},
      {'left': '4.png'},
      {'left': '4.5.png'},
      {'left': '5.png'}]
    Routine trial
  LoopTerminator trials
  Routine trial
